
{ load_file("SynManagerLoads.hoc") }


// Keep in sync with hoc:EnumSynCompIdxs.init, py:createReducedSynComps and py:initHomogenSynVars
proc createOrImportSynComps() { local isCreateOrImport localobj editableComps
    isCreateOrImport = $1
    
    if (isCreateOrImport) {
        smAllComps = new List()
        smAllComps.append(new SynPPComp("Source PP", 0))
        smAllComps.append(new SynNCComp())
        smAllComps.append(new SynPPComp("Target PP", 1))
        smAllComps.append(new SynPPComp("Single PP", 2))
    } else {
        if (smAllComps.count() != 4) {
            codeContractViolation()
        }
        editableComps = new List()
        editableComps.append(new SynPPComp(smAllComps.o(0)))
        editableComps.append(new SynNCComp(smAllComps.o(1)))
        editableComps.append(new SynPPComp(smAllComps.o(2)))
        editableComps.append(new SynPPComp(smAllComps.o(3)))
        smAllComps = editableComps
    }
}

proc makeSureSynCompsCreatedOrImported() { localobj nil

    if (isAstrocyteOrNeuron) {
        codeContractViolation()
    }
    
    if (smAllComps == nil) {
        createOrImportSynComps(1)
    } else if (!isBaseOrNanoStart && mcu4t.isReducedComps(smAllComps)) {
        createOrImportSynComps(0)
    }
}

proc makeSureSynCompsCreatedOrImportedThenShowSynManagerBaseWidget() {

    makeSureSynCompsCreatedOrImported()
    
    dismissIfNotNil(manageAndRunWidget)
    manageAndRunWidget = new ManageAndRunWidget(2)
    manageAndRunWidget.show()
    manageAndRunWidget.showSynManagerHandler()
    manageAndRunWidget.showAltRunControlHandler()
}
