
objref vBoxSEClampPPGM

{ load_file("Sims/Common/Utils/CellBoundingBoxUtils.hoc") }

if (isAstrocyteOrNeuron) {
    load_file("Sims/Astrocyte/SimCalciumDynamics.hoc")
} else {
    load_file("Sims/Neuron/SimVoltageCA1Neuron.hoc")
}
{ load_file("Sims/Common/SimExtracellularDiffusion.hoc") }
{ load_file("Sims/Common/SimFrapInCircleGeometry.hoc") }
{ load_file("Sims/Common/SimFrapLine.hoc") }
{ load_file("Sims/Common/SimSpatialVoltageDistributions.hoc") }
{ load_file("Sims/Common/SimConstantElectricalSimulations.hoc") }
{ load_file("Sims/Common/SimFrequencyElectricalSimulation.hoc") }
{ load_file("Sims/Common/SimCalciumWave.hoc") }
{ load_file("Sims/Common/SimGlutamate.hoc") }
{ load_file("Sims/Common/SimPotassium.hoc") }

// !! deprecated: get rid of this file in favour of BiophysExportImportHelper and JSON files once we:
//    (1) export/import density_GluTrans inhom model in the same way as for g_pas;
//    (2) move the GLOBAL vars assigned in "MechanismSwitch_deprecated.hoc" to the loaded JSON file
{ load_file("MechanismSwitch_deprecated.hoc") }

{ load_file("SimManager.hoc") }
